//genesis  -  simplecell.g
/*======================================================================
  A sample script to create a neuron containing channels taken from
  hh_tchan.g in the neurokit prototypes library.  SI units are used.

  October 2009 - enhanced to run under GENESIS 3

  ======================================================================*/

/* Some Booleans indicating the type of calculations or output */
int batch = 1        // if (batch) then run a default simulation
int graphics = 0     // display control panel, graphs
int file_out = 1     // write output to a file

str cellfile = "cell.p"
str cellpath = "/cell"
str injectpath = "/cell/soma"
str outfile = "Vm.out"

float injcurrent = 0.3e-9

// Create a library of prototype elements to be used by the cell reader
include protodefs

float tmax = 0.5		// simulation time in sec
float dt = 0.00001		// 10 microsec time step
setclock  0  {dt}		// set the simulation clock
float out_dt = 0.0001   // 0.1 msec interval

function make_cell
    readcell {cellfile} {cellpath}
end

function make_input
//    setfield {injectpath} inject {injcurrent}
      float spikeinterval = 0.01
      create neutral /spikesource
      create spikegen /spikesource/spiker
      setfield /spikesource x 1.0
      // spiketrain will be off if x < 0.5
      setfield /spikesource/spiker thresh 0.5 abs_refract {spikeinterval}
      addmsg /spikesource /spikesource/spiker INPUT x
      addmsg /spikesource/spiker /cell/dend/Ex_channel SPIKE
      // could set weight of synapse to 10; instead increase gmax
      setfield /cell/dend/Ex_channel gmax 5.0e-9
end

function make_output
    create asc_file /output/plot_out
    setclock 1 {out_dt}
    useclock /output/plot_out 1
    addmsg {cellpath}/soma /output/plot_out SAVE Vm
    setfield /output/plot_out filename {outfile}
end

function step_tmax
    // Add any other commands here that you want to execute for each run
    echo "START: "{getdate}
    step {tmax} -time
    echo "END: "{getdate}
end

//===============================
//         Main Script
//===============================

make_cell // creates a cell with a soma and a dend compartment
make_input // provides input to the cell


if (graphics)
   // include any graphics functions
   include graphics
   // make the control panel
   make_control
   // make the graph to display soma Vm and pass messages to the graph
   make_Vmgraph
   addmsg /cell/soma /data/voltage PLOT Vm *volts *red
   setfield /control/Injection value 0.5e-9
   set_inject /control/Injection  // set initial injection from Injection dialog
end

if (file_out)
   make_output // provides output of the results to a file
end

reset

check
reset

if (batch)
    step_tmax
end
